# Reference example: https://topas.readthedocs.io/en/latest/examples-docs/Scoring/DoseInVoxelMaterials.html
s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

# For 0.5 and 1.0 mm nozzles use [0.0625 x 0.0625 x 1] mm resolution
# For all other nozzles use [0.250 x 0.250 x 1] mm resolution
i:Ge/Phantom/XBins    = 16 # 0.0625 mm resolution 
i:Ge/Phantom/YBins    = 16 # 0.0625 mm resolution 
i:Ge/Phantom/ZBins    = 70 # 1 mm resolution 

s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX      = 5.0 cm
d:Ge/Phantom/HLY      = 5.0 cm
d:Ge/Phantom/HLZ      = 35.0 mm # Adjust stack height as necessary
d:Ge/Phantom/TransZ   = 0.0 cm
s:Ge/Phantom/Color    = "blue"

s:Sc/DoseAtPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtPhantom/Component                 = "Phantom"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseAtPhantom/OutputType               = "csv"
sv:Sc/DoseAtPhantom/Report                   = 4 "Sum" "Variance" "Count_In_Bin" "CumulativeVolumeHistogram"
i:Sc/DoseAtPhantom/HistogramBins = 10
d:Sc/DoseAtPhantom/HistogramMin = 0.0 Gy
d:Sc/DoseAtPhantom/HistogramMax = 1e-4 Gy

sv:Ph/Default/Modules = 1 "g4em-standard_opt3"

### Source ###
s:Ge/SourcePosition/Type="Group"
s:Ge/SourcePosition/Parent = "World"
d:Ge/SourcePosition/TransX = 0. cm
d:Ge/SourcePosition/TransY = 0. cm
d:Ge/SourcePosition/TransZ= -20.0 cm
d:Ge/SourcePosition/RotX=0. deg
d:Ge/SourcePosition/RotY=0. deg
d:Ge/SourcePosition/RotZ=0. deg

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "SourcePosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 50 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.65 cm
d:So/Example/BeamPositionSpreadY      = 0.65 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad

i:So/Example/NumberOfHistoriesInRun = 1000000
i:Ts/ShowHistoryCountAtInterval     = 100000
i:Ts/NumberOfThreads                = 12

### Optional Graphics ###
# b:Ts/PauseBeforeQuit = "True"
# b:Ts/UseQt = "True"
# b:Gr/ViewA/IncludeAxes = "True"
# d:Gr/ViewA/AxesSize = 5 cm
# s:Gr/ViewA/Type                             = "OpenGL"
# i:Gr/ViewA/WindowSizeX                      = 900
# i:Gr/ViewA/WindowSizeY                      = 900
# u:Gr/ViewA/Zoom                             = 1.3
# b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"
